CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:SIM
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:Widefield
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:SIM
    Name the primary objects to be identified:MitoProcesses
    Typical diameter of objects, in pixel units (Min,Max):8,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:120
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.125,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:MitoProcesses
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:SIM
    Select objects to measure:MitoProcesses

ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:MitoProcesses
    Name the output objects:MitoProcessesSkeleton
    Select the operation:Skeletonize each object
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:MitoProcessesSkeleton
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:SIM
    Name the output image:Overlay_MitoProcesses
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#09FD02
    Select objects to display:MitoProcesses

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:Overlay_MitoProcesses
    Select method for constructing file names:From image filename
    Select image name for file prefix:SIM
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|P:\\DATA\\wuestt\\confocal\\hiPSC Synaptogenesis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_MitoProcesses,Image|FileName_SIM,MitoProcesses|AreaShape_Area,MitoProcesses|AreaShape_Eccentricity,MitoProcesses|AreaShape_Compactness,MitoProcesses|Intensity_IntegratedIntensity_SIM,MitoProcesses|Intensity_MeanIntensity_SIM,MitoProcessesSkeleton|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:230817_SIM
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:_mean.csv
    Use the object name for the file name?:No
    Data to export:MitoProcesses
    Combine these object measurements with those of the previous object?:No
    File name:_IndMitochondria.csv
    Use the object name for the file name?:No
    Data to export:MitoProcessesSkeleton
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
