CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(Re00_\d+)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(Re00_.+)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "cleaned")
    Name to assign these images:raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "soma") (file does containregexp "^Probabilities_0")
    Name to assign these images:soma
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "mito") (file does containregexp "^Probabilities_0")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:raw
    Name the output image:cropRaw
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:100,-100
    Top and bottom rectangle positions:100,-100
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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
    Select the input image:mito
    Name the output image:cropMito
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:100,-100
    Top and bottom rectangle positions:100,-100
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:7|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
    Select the input image:soma
    Name the output image:cropSoma
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:100,-100
    Top and bottom rectangle positions:100,-100
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    Remove empty rows and columns?:Edges
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
Smooth:[module_num:8|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
    Select the input image:cropSoma
    Name the output image:SomaSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:50
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:SomaSmooth
    Name the primary objects to be identified:soma
    Typical diameter of objects, in pixel units (Min,Max):75,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:200
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.95
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:soma
    Name the output objects:SomaEx
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:cropMito
    Name the primary objects to be identified:mito
    Typical diameter of objects, in pixel units (Min,Max):5,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:50
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.3,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:SomaEx, mito
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:cropRaw
    Select objects to measure:mito

RelateObjects:[module_num:14|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
    Parent objects:SomaEx
    Child objects:mito
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Mitoinsoma
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:cropRaw
    Name the output image:Segmentation
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF8040
    Select objects to display:SomaEx
    Select outline color:Green
    Select objects to display:mito

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:Segmentation
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_SomaEx,Image|FileName_raw,mito|AreaShape_Area,mito|Intensity_MeanIntensity_cropRaw,mito|Parent_SomaEx
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:250807_Re00_240315
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:mean.csv
    Use the object name for the file name?:No
    Data to export:mito
    Combine these object measurements with those of the previous object?:No
    File name:mito.csv
    Use the object name for the file name?:No
