CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "raw_mip") (metadata does C "1")
    Name to assign these images:rawcalcium
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (directory does contain "raw_mip") (metadata does C "2")
    Name to assign these images:rawmtdna
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (directory does contain "pkmdr_mito")
    Name to assign these images:pkmdr
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (directory does contain "sybr")
    Name to assign these images:mtDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (directory does contain "pkmdr_soma")
    Name to assign these images:pkmdrsoma
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:rawcalcium
    Name the output image:Croprawcalcium
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:200,-200
    Top and bottom rectangle positions:200,-200
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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
    Select the input image:rawmtdna
    Name the output image:Croprawmtdna
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:200,-200
    Top and bottom rectangle positions:200,-200
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:7|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
    Select the input image:pkmdrsoma
    Name the output image:Croppkmdrsoma
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:200,-200
    Top and bottom rectangle positions:200,-200
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:8|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
    Select the input image:mtDNA
    Name the output image:Cropmtdna
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:200,-200
    Top and bottom rectangle positions:200,-200
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:9|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
    Select the input image:pkmdr
    Name the output image:Croppkmdr
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:200,-200
    Top and bottom rectangle positions:200,-200
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    Remove empty rows and columns?:Edges
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
IdentifyPrimaryObjects:[module_num:10|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notes:['']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
    Select the input image:Croppkmdr
    Name the primary objects to be identified:Mito
    Typical diameter of objects, in pixel units (Min,Max):5,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:80
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0.3,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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notes:['']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
    Select the input image:Cropmtdna
    Name the primary objects to be identified:mtDNA
    Typical diameter of objects, in pixel units (Min,Max):2,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:11.5
    Lower and upper bounds on threshold:0.25,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
Smooth:[module_num:12|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
    Select the input image:Croppkmdrsoma
    Name the output image:SomaSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:50.0
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:SomaSmooth
    Name the primary objects to be identified:Soma
    Typical diameter of objects, in pixel units (Min,Max):75,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:200
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:14|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
    Select the input objects:Soma
    Name the output objects:ExpandedSoma
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:15
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
MaskObjects:[module_num:15|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
    Select objects to be masked:mtDNA
    Name the masked objects:mtDNAinMito
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Mito
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:16|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
    Select objects to be masked:mtDNA
    Name the masked objects:mtDNAoutside
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:mtDNAinMito
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:17|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
    Parent objects:Soma
    Child objects:Mito
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:MitoinSoma
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
RelateObjects:[module_num:18|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
    Parent objects:Mito
    Child objects:mtDNAinMito
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExpandOrShrinkObjects:[module_num:19|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
    Select the input objects:Mito
    Name the output objects:MitoSkeleton
    Select the operation:Skeletonize each object
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
MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:Mito, MitoSkeleton, Soma, mtDNA, mtDNAinMito, mtDNAoutside
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:Croprawcalcium, Croprawmtdna
    Select objects to measure:Mito, Soma, mtDNA

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Croppkmdr
    Name the output image:OutlineFigure
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Soma
    Select outline color:#910BB7
    Select objects to display:Mito
    Select outline color:red
    Select objects to display:mtDNAoutside
    Select outline color:green
    Select objects to display:mtDNAinMito

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cropmtdna
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:mtDNA

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:OutlineFigure
    Select method for constructing file names:From image filename
    Select image name for file prefix:pkmdr
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:OutlineFigure
    Saved file format:png
    Output file location:Default Output Folder|Y:\\shared\\00-Lab_members\\Lasse\\Master Thesis\\CellProfiler_Test\\06_CellProfilerOutput
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/Volumes/biol_bc_kleele_2/Avery/Analyses/Automated Analyses/MIP/Nv3/Day2/Cp_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:mtDNA|Intensity_MeanIntensity_Croprawmtdna,Mito|Intensity_MeanIntensity_Croprawcalcium,Mito|AreaShape_Area,Mito|Children_mtDNAinMito_Count,Mito|Parent_Soma,Soma|Intensity_MeanIntensity_Croprawcalcium,Image|FileName_mtDNA,Image|Count_mtDNA,Image|Count_Soma,Image|Count_mtDNAinMito,Image|Count_mtDNAoutside,Image|Count_MitoinSoma,MitoSkeleton|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20250717_nv13
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:_mean.csv
    Use the object name for the file name?:No
    Data to export:Mito
    Combine these object measurements with those of the previous object?:No
    File name:_PKMDR_Mitochondria.csv
    Use the object name for the file name?:No
    Data to export:MitoSkeleton
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
