CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:53
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:MAP2
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:PSD95
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:SYN
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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notes:['T: feature size from 25 to 40']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
    Select the input image:MAP2
    Name the output image:MapSuprDforS
    Select the operation:Suppress
    Feature size:40
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Max Soma size: 350 (300)', '', 'pLNA experiment', '', 'T: typical diameter lower value - from 50 to 100', 'ms: soma discard: no', '', '', '1805ms >> pic K_2_3: ', 'upper diam.: 300 ', 'smoothing size 100', 'local max. dist. 150', '', '>> pic E_1_6', 'min diam. 75', 'thresh corr. > 0.5']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
    Select the input image:MapSuprDforS
    Name the primary objects to be identified:MapSoma
    Typical diameter of objects, in pixel units (Min,Max):100,350
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:100
    Suppress local maxima that are closer than this minimum allowed distance:150
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:MapSoma
    Name the output objects:MapSomaEx
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:50
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
MaskImage:[module_num:8|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
    Select the input image:DAPI
    Name the output image:DAPISomaMask
    Use objects or an image as a mask?:Objects
    Select object for mask:MapSomaEx
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['Upper threshold to 0.13', 'Min size to 55 (60)', 'Threshold correction: 0.9 (1.0)', 'Size of smoothing filter for declumping: 50 (automatic)', 'Minimal distance for declumping: 75 (automatic)', '', 'pLNA experiment', '', 'Trial to get the first step faster… (no surpress, but diameter 50-200)', 'T: diameter to 70 to 200', '', 'ms: min dia: 60', '', 'Keep border objects']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
    Select the input image:DAPISomaMask
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):45,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:50
    Suppress local maxima that are closer than this minimum allowed distance:75
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.001,0.13
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:10|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notes:['Mask to 0.4 (0.8)', '', 'pLNA experiment']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
    Select objects to be masked:Nuclei
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MapSoma
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.4
    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:11|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notes:['T: leave it at 100 and add expand', '']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
    Select the input objects:MaskedNuclei
    Name the objects to be identified:Soma
    Select the method to identify the secondary objects:Distance - B
    Select the input image:MapSuprDforS
    Number of pixels by which to expand the primary objects:100
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.34880
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0,0.3
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureImageAreaOccupied:[module_num:12|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Soma

ExpandOrShrinkObjects:[module_num:13|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notes:['Expand to 21 (10)', '', 'pLNA Experiment', '', '26.05.20', 'T: minimum 10 ', '', '06.05.20', 'T: 10']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
    Select the input objects:Soma
    Name the output objects:SomaExp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:21
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MAP2
    Name the output image:OverlayNuc
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF8000
    Select objects to display:MaskedNuclei
    Select outline color:#9F0000
    Select objects to display:SomaExp

IdentifyPrimaryObjects:[module_num:15|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notes:['Lower thresshold 0.07 (0.08)', '', 'pLNA experiment', '', 'T: threshold Correction Factor from 0.75 to 0.3', '', '02.06.20', 'T: correction factor to 0.55', 'lower bound to 0.08', '']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
    Select the input image:MAP2
    Name the primary objects to be identified:DendMapTubeObj
    Typical diameter of objects, in pixel units (Min,Max):25,999999
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.34880
    Threshold correction factor:0.55
    Lower and upper bounds on threshold:0.07,1.0000000
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:16|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
    Select the larger identified objects:DendMapTubeObj
    Select the smaller identified objects:SomaExp
    Name the tertiary objects to be identified:DendMapTubeSomaRm
    Shrink smaller object prior to subtraction?:No

ConvertObjectsToImage:[module_num:17|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
    Select the input objects:DendMapTubeSomaRm
    Name the output image:DendSomaRm
    Select the color format:Binary (black & white)
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
Morph:[module_num:18|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
    Select the input image:DendSomaRm
    Name the output image:SkelSomaRm
    Select the operation to perform:skelpe
    Number of times to repeat operation:Forever
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
MeasureImageIntensity:[module_num:19|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
    Select images to measure:SkelSomaRm
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
EnhanceOrSuppressFeatures:[module_num:20|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notes:['feature size from 20 to 8']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
    Select the input image:PSD95
    Name the output image:PSD95Enh
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Fast
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
ExpandOrShrinkObjects:[module_num:21|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
    Select the input objects:DendMapTubeSomaRm
    Name the output objects:DendMapTubeSomaRmPSDmask
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:40
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
MaskImage:[module_num:22|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
    Select the input image:PSD95Enh
    Name the output image:PSD95Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:DendMapTubeSomaRmPSDmask
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:23|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notes:['Lower thresshold to 0.045 (0.075)', 'Threshold correction factor: 3 (3.1)', '', 'pLNA experiment', '', 'pLNA Pilot: had to lower the thresshold from 0.2 to 0.075 because of the weaker staining / laser']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
    Select the input image:PSD95Masked
    Name the primary objects to be identified:PSD95
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:3
    Lower and upper bounds on threshold:0.045,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
OverlayObjects:[module_num:24|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
    Input:MAP2
    Name the output image:OverlayPSD
    Objects:PSD95
    Opacity:0.3

EnhanceOrSuppressFeatures:[module_num:25|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notes:['feature size from 20 to 15']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
    Select the input image:SYN
    Name the output image:SynEnh
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:26|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notes:['smoothing filter: 3 (0)', 'Lower threshold: 0.15 (1.2)', '', 'pLNA experiment', '', '22.05.20', 'T: typical diameter from 3 to 5', '', 'ms: 4 und 3.1?']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
    Select the input image:SynEnh
    Name the primary objects to be identified:Syn
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:3.25
    Lower and upper bounds on threshold:0.15,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
OverlayObjects:[module_num:27|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
    Input:MAP2
    Name the output image:OverlaySyn
    Objects:Syn
    Opacity:0.5

ExpandOrShrinkObjects:[module_num:28|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notes:['maybe maybe not??']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
    Select the input objects:DendMapTubeSomaRm
    Name the output objects:DendSomaRmEx
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MAP2
    Name the output image:OverlayDend
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#6C6CFF
    Select objects to display:DendMapTubeSomaRm
    Select outline color:#80FFFF
    Select objects to display:DendSomaRmEx

MaskObjects:[module_num:30|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
    Select objects to be masked:PSD95
    Name the masked objects:PSDMaskByDEND
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DendSomaRmEx
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:31|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
    Select objects to be masked:Syn
    Name the masked objects:MaskedSynByPSDdend
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PSDMaskByDEND
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:32|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
    Select objects to be masked:Syn
    Name the masked objects:SynMaskByDend
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DendSomaRmEx
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:33|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notes:['T: changed to DendMap_tube_SomaRm mask']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
    Select objects to be masked:PSD95
    Name the masked objects:MaskPSDbySYNdend
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:SynMaskByDend
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:34|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MAP2
    Name the output image:Overlay_all_SynPSD
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Syn
    Select outline color:Green
    Select objects to display:PSD95

OverlayOutlines:[module_num:35|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MAP2
    Name the output image:Overlay_count_Synapses
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:MaskedSynByPSDdend
    Select outline color:Green
    Select objects to display:MaskPSDbySYNdend

CalculateMath:[module_num:36|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
    Name the output measurement:DensitySynByPSDdend
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_MaskedSynByPSDdend
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_TotalIntensity_SkelSomaRm
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:37|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
    Name the output measurement:DensityPSDBySynDend
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_MaskPSDbySYNdend
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_TotalIntensity_SkelSomaRm
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:38|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notes:['>> Masked Nuclei']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
    Name the output measurement:SynapseDensityPerCell
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_MaskedSynByPSDdend
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_MaskedNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureImageAreaOccupied:[module_num:39|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
    Measure the area occupied by:Objects
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    Select object sets to measure:DendMapTubeSomaRm

CalculateMath:[module_num:40|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
    Name the output measurement:SynByPSDdendArea
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_MaskedSynByPSDdend
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_DendMapTubeSomaRm
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:41|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
    Name the output measurement:PSDbySynDendArea
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_MaskPSDbySYNdend
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_DendMapTubeSomaRm
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureObjectIntensity:[module_num:42|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
    Select images to measure:SYN
    Select objects to measure:SynMaskByDend

MeasureObjectIntensity:[module_num:43|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
    Select images to measure:PSD95
    Select objects to measure:PSDMaskByDEND

FlipAndRotate:[module_num:44|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notes:['']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
    Select the input image:SynEnh
    Name the output image:RotatedSyn
    Select method to flip image:Do not flip
    Select method to rotate image:Enter angle
    Crop away the rotated edges?:No
    Calculate rotation:Individually
    Enter coordinates of the top or left pixel:0,0
    Enter the coordinates of the bottom or right pixel:0,100
    Select how the specified points should be aligned:horizontally
    Enter angle of rotation:180

IdentifyPrimaryObjects:[module_num:45|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notes:['smoothing filter: 3 (0)', 'Lower threshold: 0.15 (1.2)', '', 'pLNA experiment']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
    Select the input image:RotatedSyn
    Name the primary objects to be identified:RotObjSyn
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:3.25
    Lower and upper bounds on threshold:0.15,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:46|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notes:['T: changed to DendMap_tube_SomaRm mask']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
    Select objects to be masked:RotObjSyn
    Name the masked objects:MaskedRotSynbyPSDDend
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PSDMaskByDEND
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

CalculateMath:[module_num:47|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
    Name the output measurement:RandomParticlesPerCell
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_MaskedRotSynbyPSDDend
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_MaskedNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:48|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
    Select the type of image to save:Image
    Select the image to save:OverlayPSD
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAP2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayPSD
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:49|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
    Select the type of image to save:Image
    Select the image to save:OverlaySyn
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAP2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlaySyn
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:Overlay_count_Synapses
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAP2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayCountSynapses
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:OverlayDend
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAP2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayDend
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:OverlayNuc
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAP2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayNuc
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:53|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|P:\\DATA\\wuestt\\confocal\\hiPSC Synaptogenesis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_MaskPSDbySYNdend,Image|Count_MaskedSynByPSDdend,Image|Count_MaskedNuclei,Image|Count_MaskedRotSynbyPSDDend,Image|Count_PSDMaskByDEND,Image|Count_SynMaskByDend,Image|AreaOccupied_AreaOccupied_Soma,Image|AreaOccupied_AreaOccupied_DendMapTubeSomaRm,Image|Intensity_TotalIntensity_SkelSomaRm,Image|FileName_MAP2,Image|Math_SynapseDensityPerCell,Image|Math_RandomParticlesPerCell,Image|Math_DensitySynByPSDdend,Image|Math_SynByPSDdendArea,PSDMaskByDEND|Intensity_IntegratedIntensity_PSD95,PSDMaskByDEND|Intensity_MeanIntensity_PSD95,PSDMaskByDEND|Number_Object_Number,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:221018_Synapses
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:_mean.csv
    Use the object name for the file name?:No
    Data to export:PSDMaskByDEND
    Combine these object measurements with those of the previous object?:No
    File name:_ObjectIntensitieAndSkels.csv
    Use the object name for the file name?:No
    Data to export:SynMaskByDend
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Soma
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
