CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:Mitotracker
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:Map2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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notes:['']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
    Select the input image:Map2
    Name the output image:MapSuprDforS
    Select the operation:Suppress
    Feature size:40
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
IdentifyPrimaryObjects:[module_num:6|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notes:['']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
    Select the input image:MapSuprDforS
    Name the primary objects to be identified:MapSoma
    Typical diameter of objects, in pixel units (Min,Max):100,350
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:100
    Suppress local maxima that are closer than this minimum allowed distance:150
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:MapSoma
    Name the output objects:MapSomaEx
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:50
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
MaskImage:[module_num:8|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
    Select the input image:DAPI
    Name the output image:DAPISomaMask
    Use objects or an image as a mask?:Objects
    Select object for mask:MapSomaEx
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['']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
    Select the input image:DAPISomaMask
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):45,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:50
    Suppress local maxima that are closer than this minimum allowed distance:75
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.001,0.13
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:10|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notes:['']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
    Select objects to be masked:Nuclei
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MapSoma
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.4
    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:11|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notes:['', '']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
    Select the input objects:MaskedNuclei
    Name the objects to be identified:Soma
    Select the method to identify the secondary objects:Distance - B
    Select the input image:MapSuprDforS
    Number of pixels by which to expand the primary objects:100
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.34880
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0,0.3
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureImageAreaOccupied:[module_num:12|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Soma

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Map2
    Name the output image:OverlayNuc
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF8000
    Select objects to display:MaskedNuclei
    Select outline color:#9F0000
    Select objects to display:Soma

MaskImage:[module_num:14|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notes:['We mask the Mitotracker image to specifically get to the "Puncta" in the Soma.']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
    Select the input image:Mitotracker
    Name the output image:MitotrackerInSoma
    Use objects or an image as a mask?:Objects
    Select object for mask:Soma
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:MitotrackerInSoma
    Name the output image:EnhancedPuncta
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:EnhancedPuncta
    Name the primary objects to be identified:SomaMitoPuncta
    Typical diameter of objects, in pixel units (Min,Max):3,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:4
    Lower and upper bounds on threshold:0.015,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Mitotracker
    Name the output image:_MitoSomaPuncta_Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#05FAF3
    Select objects to display:SomaMitoPuncta

RelateObjects:[module_num:18|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
    Parent objects:Soma
    Child objects:SomaMitoPuncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureImageIntensity:[module_num:19|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
    Select images to measure:Mitotracker
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Soma
    Calculate custom percentiles:No
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
MeasureTexture:[module_num:20|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notes:['Try maybe Contrast, Variance, Entropy']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
    Select images to measure:Mitotracker
    Select objects to measure:Soma
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:5

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:_MitoSomaPuncta_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mitotracker
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayMitoPunctaSoma
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:OverlayNuc
    Select method for constructing file names:From image filename
    Select image name for file prefix:Map2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayNuc
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|P:\\DATA\\wuestt\\confocal\\hiPSC Synaptogenesis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Soma|Texture_Variance_Mitotracker_5_00_256,Soma|Texture_Variance_Mitotracker_5_03_256,Soma|Texture_Variance_Mitotracker_5_02_256,Soma|Texture_Variance_Mitotracker_5_01_256,Soma|Texture_Entropy_Mitotracker_5_03_256,Soma|Texture_Entropy_Mitotracker_5_00_256,Soma|Texture_Entropy_Mitotracker_5_01_256,Soma|Texture_Entropy_Mitotracker_5_02_256,Image|Count_SomaMitoPuncta,Image|Count_MaskedNuclei,Image|FileName_Map2,Image|Intensity_MeanIntensity_Mitotracker_Soma,Image|AreaOccupied_AreaOccupied_Soma
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:230703_Mitotracker
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:_mean.csv
    Use the object name for the file name?:No
    Data to export:Soma
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
